---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1200
set uniform_coordinates no
set transparent_variables no
set title "MouseTrack True or False"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 800
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/orlacamus/Desktop/ua-code0715/paradigm/paradigm20220819"
set disable_garbage_collection yes
set description "A simple template for the mouse-tracking paradigm"
set custom_cursor no
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background white

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script always
	run new_notepad always
	run new_sketchpad always
	run setup_script always
	run trial_loop always

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log yes
	log height
	log subject_nr
	log width
	log probe
	log condition
	log response
	log accuracy
	log rt
	log xTrajectory
	log yTrajectory
	log tTrajectory
	log count_trial_sequence
	log menu

define inline_script new_inline_script
	set description "执行Python代码"
	___run__
	log.close()
	log.open(u'C:/xinyi/paradigm20220819/testdata/subject-%s_pref-pre.csv'%(var.subject_nr))
	__end__
	set _prepare ""

define notepad new_notepad
	__note__
	Coded by Haiyan Wu
	
	2019 Feb
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="soIns.png" scale=1 show_if=always x=32 y=0 z_index=0

define inline_script question_script
	set description "Executes Python code"
	___run__
	# Fixation
	tick = fixation_length / 3
	my_canvas.clear()
	
	my_canvas.show()
	exp.sleep(tick)  
	my_canvas.text('+')
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.clear()
	my_canvas.image(probe)
	my_canvas.show()
	exp.sleep(tick)
	
	# Draw Start Button
	#my_canvas.clear()
	my_canvas.image(probe)
	my_canvas.image(start_button, True, mx, (2*my) - half_start_h)
	my_canvas.show()
	my_mouse.show_cursor(show=True)
	
	
	#Wait for click on start button
	while 1:
		button, position, timestamp = my_mouse.get_click()
		x, y = position
		if x > mx-half_start_w and x < mx+half_start_w and y > (2*my) - 2*half_start_h:
			my_canvas.clear()
			break
	
	# Hide the mouse
	my_mouse.show_cursor(show=False)
	
	# Show the stimuli
	my_canvas.clear()
	my_canvas.image(probe)
	my_canvas.image(exp.get_file(ans1), False, -20, 0)
	my_canvas.image(exp.get_file(ans2), False, 2*mx - response_w+100, 0)
	#my_canvas.image(exp.get_file(prob1), False, 180, 420)
	#my_canvas.image(exp.get_file(prob2), False, 880,420)
	my_canvas.show()
	# Show the mouse, and move it to the starting point
	my_mouse.show_cursor(show=True)
	my_mouse.set_pos(pos=(mx, (2*my)-half_start_h))
	
	# The actual mouse tracking
	t0 = start = exp.time()
	t1 = t0 + sample_rate
	resp = 0
	timed_out = False
	slow_start = False
	while 1:
		position, timestamp = my_mouse.get_pos()
		if my_mouse.get_pressed()[0]: # A click
			if x < 100 and y < response_h+20:
				# Clicked response 1
				rt = timestamp - start
				resp = 1
				print('response 1')
				break
			elif x > (2*mx) - response_w+160 and y < response_h:
				# Clicked response 2
				rt = timestamp - start
				resp = 2
				print('response 2')
				break
		if timestamp > t1:
			# It's time to record the mouse position
			t1 += sample_rate
			t = timestamp - start
			x, y = position
			xList.append(x)
			yList.append(y)
			tList.append(t)
			if t > max_response_time:
				# Out of time, record a null response.
				timed_out = True
				resp = -1
				rt = None
				print('Timeout')
				break
	
	# Let's figure out if the response was correct
	#if correct_response == '1':
	#	correct_response = 1
	#else:
	#	correct_response = 2
	accuracy = int(resp == correct_response)
	
	# Figure out if the mouse had left the start button by max_init_time
	for i in range(len(yList)):
		y = yList[i]
		if y < ((2*my) - (2*half_start_h)):
			init_step = i # The sample where y left the button
			break
	init_time = tList[init_step] # 	The time of that sample
	slow_start = int(init_time > max_init_time)
	
	# Show a message if wrong answer (optional)
	#if accuracy == 0 and not timed_out:
	#	my_canvas.clear()
	#	my_canvas.text(error_message)
	#	my_canvas.show()
	#	exp.sleep(error_message_duration)
	
	# Show a message if the trial has timed out without a response
	if timed_out:
		my_canvas.clear()
		my_canvas.text(timeout_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	# Show a message if the trial has timed out without a response
	if (slow_start and not timed_out):
		my_canvas.clear()
		my_canvas.text(slow_start_message)
		my_canvas.show()
		timed_out = False
		my_keyboard.get_key()
	
	if accuracy == 1:
		var.totalCorrect += 1 # if correct response given increase that counter
		var.myAcc = float(var.totalCorrect)/72 # compute new accuracy
	
	self.experiment.set("probe", probe)
	self.experiment.set("response", resp)
	self.experiment.set("accuracy", accuracy)
	self.experiment.set("rt", rt)
	self.experiment.set("xTrajectory", str(xList))
	self.experiment.set("yTrajectory", str(yList))
	self.experiment.set("tTrajectory", str(tList))
	#Set slider dimensions
	slider_w = 500
	slider_h = 10
	slider_x = self.get("width")/2-slider_w/2
	slider_y = self.get("height")/2-slider_h/2
	
	while True:
	
		# Determine the slider fill based on the mouse position
		pos, time = my_mouse.get_pos()
		x, y = pos
		slider_fill = min(slider_w, max(0, x-slider_x))
	
		my_canvas.clear()
		# Draw some text (this can be anything)
		my_canvas.image(degree_prefer, True, 600, slider_y-80)
		#my_canvas.text("你有多喜欢你选的这个(1-100%)?", y=slider_y-80) 
		#my_canvas.text(" 点击一个你喜欢的程度",y=slider_y+80) 
		# Draw the slider frame
		my_canvas.rect(slider_x, slider_y, slider_w, slider_h)
		# Draw the slider fill
		my_canvas.rect(slider_x, slider_y, slider_fill, slider_h, fill=True)                
		# Draw the mouse cursor
		my_canvas.arrow(x+5, y+10, x, y)
		my_canvas.show()
	
		# Poll the mouse for buttonclicks
		button, position, timestamp = my_mouse.get_click(timeout = 20)
		if button != None:
			break	
	slider_percent = 100.0*slider_fill/slider_w     
	self.experiment.set("preference", slider_percent)
	
	# Standard Logging (the probe and code variables are taken care of automatically)
	print(var.myAcc)
	__end__
	___prepare__
	# Constants
	max_response_time = 4000
	fixation_length = 900
	error_message_duration = 1000
	max_init_time = 800
	sample_rate = 5
	#p=randint(1, 9)
	import os, random, sys,glob, time
	
	
	
	# Images
	start_button = exp.get_file('materials/start.png')
	probe = exp.get_file('materials/you.png')
	degree_prefer = exp.get_file('materials/degree_prefer.png')
	ans1 = exp.get('answer1')
	ans2 = exp.get('answer2')
	#p1 = exp.get('prob1')
	#p2 = exp.get('prob2')
	
	# Text
	timeout_message = "Too slow!\n\
	Try to respond more quickly.\n\
	Press any key to continue."
	slow_start_message = "\
	Please try to move the mouse as soon\n\
	as you see the target, even if you're not\n\
	sure of your response yet\n\
	Press any key to continue."
	error_message = "<span color='red'>wrong answer!</span>"
	# Turn our OpenSesame variables into plain Python ones
	#probe = exp.get('probe')
	correct_response = exp.get('correct_response')
	
	# Some dimensions
	# Our start button is 80x80 pixels.
	# Change these values if using a different sized image.
	half_start_w = 40
	half_start_h = 40
	# Likewise for the response images
	response_w = 270
	response_h = 100
	# Get the size of the screen
	mx = my_canvas.xcenter()
	my = my_canvas.ycenter()
	
	# Some empty lists for recording mouse data
	xList, yList, tList = [], [], []
	__end__

define inline_script setup_script
	set description "Executes Python code"
	___run__
	# Create our input and output routines
	from openexp.mouse import mouse
	from openexp.keyboard import keyboard
	from openexp.canvas import canvas
	#from random import randint
	
	# Declare them as global, so we can use them later on.
	global my_mouse, my_keyboard, my_canvas
	
	
	my_mouse = mouse(exp, visible=True)
	my_keyboard = keyboard(exp)
	my_canvas = canvas(exp)
	
	
	var.totalCorrect = 0
	var.myAcc = None
	
	#log.close()
	#log.open('/Users/orlacamus/Desktop/ua-code0715/paradigm/paradigm20220819/testdata/subject-%s_self-pre.csv'%subject_nr)
	__end__
	set _prepare ""

define loop trial_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "Repeatedly runs another item"
	set cycles 72
	set continuous no
	set column_order "probe;condition"
	set break_if_on_first yes
	set break_if never
	setcycle 0 answer1 "1.jpg"
	setcycle 0 answer2 "37.jpg"
	setcycle 0 condition enhance_honesty
	setcycle 0 correct_response 1
	setcycle 0 probi1 ""
	setcycle 0 probi2 ""
	setcycle 0 probe "你更喜欢哪个"
	setcycle 0 menu 1
	setcycle 1 answer1 "37.jpg"
	setcycle 1 answer2 "1.jpg"
	setcycle 1 condition enhance_honesty
	setcycle 1 correct_response 2
	setcycle 1 probi1 ""
	setcycle 1 probi2 ""
	setcycle 1 probe "你更喜欢哪个"
	setcycle 1 menu 1
	setcycle 2 answer1 "2.jpg"
	setcycle 2 answer2 "38.jpg"
	setcycle 2 condition enhance_lie
	setcycle 2 correct_response 1
	setcycle 2 probi1 ""
	setcycle 2 probi2 ""
	setcycle 2 probe "你更喜欢哪个"
	setcycle 2 menu 2
	setcycle 3 answer1 "38.jpg"
	setcycle 3 answer2 "2.jpg"
	setcycle 3 condition enhance_lie
	setcycle 3 correct_response 2
	setcycle 3 probi1 ""
	setcycle 3 probi2 ""
	setcycle 3 probe "你更喜欢哪个"
	setcycle 3 menu 2
	setcycle 4 answer1 "3.jpg"
	setcycle 4 answer2 "39.jpg"
	setcycle 4 condition enhance_random
	setcycle 4 correct_response 1
	setcycle 4 probi1 ""
	setcycle 4 probi2 ""
	setcycle 4 probe "你更喜欢哪个"
	setcycle 4 menu 3
	setcycle 5 answer1 "39.jpg"
	setcycle 5 answer2 "3.jpg"
	setcycle 5 condition enhance_random
	setcycle 5 correct_response 2
	setcycle 5 probi1 ""
	setcycle 5 probi2 ""
	setcycle 5 probe "你更喜欢哪个"
	setcycle 5 menu 3
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	run trial_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run question_script always
	run logger always

